<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindVideoEncodingBenchmarksSchemas.Rig;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CameraStream" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>TriggeredCamerasLogger</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TriggeredCameraController</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="CameraStream" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasStream0</Name>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TriggeredCamerasStream</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCameraController</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cameras</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.VideoWriter</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="p1:MatchVideoWriter">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterFfmpeg" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>FfmpegWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>This</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>This</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>This</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FrameRate</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="EncodingFrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ContainerExtension</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="VideoExtension" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OutputArguments</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Codec" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Modality" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai">
                    <SubjectName>LoggingRootPath</SubjectName>
                    <Modality xsi:nil="true" />
                    <LogName>FaceCamera</LogName>
                    <EncodingFrameRate>60</EncodingFrameRate>
                    <VideoExtension>mp4</VideoExtension>
                    <MetadataExtension>csv</MetadataExtension>
                    <Codec>-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr</Codec>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraLoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCamerasStream</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraLoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraLoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="Video" />
                      <Property Name="FrameRate" Selector="Logger.EncodingFrameRate" />
                      <Property Name="OutputArguments" Selector="Logger.Codec" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:FfmpegVideoWriter">
                      <p2:Overwrite>false</p2:Overwrite>
                      <p2:FrameRate>0</p2:FrameRate>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="22" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="22" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="22" Label="Source3" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="22" Label="Source4" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source5" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="31" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source2" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="35" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCameraController</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cameras</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.VideoWriter</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="p1:MatchVideoWriter">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterOpenCv" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>OpenCvWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>This</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>This</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>This</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FrameRate</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="EncodingFrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ContainerExtension</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="VideoExtension" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FourCc</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Codec" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Modality" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai">
                    <SubjectName>LoggingRootPath</SubjectName>
                    <Modality xsi:nil="true" />
                    <LogName>FaceCamera</LogName>
                    <EncodingFrameRate>60</EncodingFrameRate>
                    <VideoExtension>mp4</VideoExtension>
                    <MetadataExtension>csv</MetadataExtension>
                    <Codec>-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr</Codec>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraLoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCamerasStream</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCameraName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraLoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraLoggerPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="Video" />
                      <Property Name="FrameRate" Selector="Logger.EncodingFrameRate" />
                      <Property Name="FourCC" Selector="Logger.Codec" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="22" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="22" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="22" Label="Source3" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="22" Label="Source4" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source5" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="31" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source2" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="35" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="22" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>